OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)

CSV File Reader => #0
  Filename = C:/Users/cassa/Documents/Ullo/Machine_Learning/Enregistrement_EPOC+ (no_filter)/Cassandra_Méditation
#0.Output stream -> Channel Selector "O1 - O2"
  Channel List = channel 7 ; channel 8
  Action = Select
  Channel Matching Method = Name
-> Spatial Filter
  Spatial Filter Coefficients = 0.5;0.5
  Number of Output Channels = 1
  Number of Input Channels = 2
  Filter matrix file =
-> Temporal filter "Filtre 7 - 13 Hz" => #3
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 7
  High Cut-off Frequency (Hz) = 13
  Band Pass Ripple (dB) = 0.5
Data=#3 -> Signal display "Alpha"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#3 -> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.0625
-> Simple DSP
  Equation = x*x
-> Signal average => #7
-> Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Data=#7 -> Signal display "Alpha Power"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 160
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input signal=#7 -> LSL Export (Gipsa)
  Stream name = BCI
  Stream type = EEG
